PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AB
  keyboardBackend = ioHub
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Routines
  Routine T1_number
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    TextComponent text_T1
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $bignum
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  Routine T2_probe
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    TextComponent text_T2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.083
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $sectag
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  Routine Ask_T1
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    TextComponent blankT1_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_7
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Odd-F    Even-J
    TextComponent blankT1_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $oddeven
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Ask_T2
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    TextComponent blankT2_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_11
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Related-F    Unrelated-J
    TextComponent blankT2_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $relatedu
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine instructions
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    TextComponent text_insctructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        指导语

        如果看到奇数，请按键盘上的F键。
        如果看到偶数，请按键盘上的J键。
        请您集中注意力，反应要尽可能准确且迅速。准备好后，我们将开始测试。

        祝您好运！

        Instructions

        If you see an odd number, please press the F key on your keyboard.
        If you see an even number, please press the J key on your keyboard.
        Please focus your attention and try to respond as accurately and swiftly as possible. Once you are ready, we will begin the test.
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import csv
        import random

        def read_and_shuffle_csv(input_file, output_file):
            # 确保以正确的编码格式读取CSV文件Ensure the CSV file is read with the correct encoding format.
            with open(input_file, mode='r', encoding='utf-8') as file:
                reader = csv.reader(file)
                next(reader)  # 跳过第一行 Skip the first line.
                # 将所有行的内容合并为一个字符串，同时去除逗号 Convert the text into a list of characters, and shuffle the order randomly.
                text = ''.join([''.join(row[:2]).replace(',', '') for row in reader])

            # 将文本转换为字符列表，并随机打乱顺序 Convert the text into a list of characters, and shuffle the order randomly.
            characters = list(text)
            random.shuffle(characters)

            # 将字符分组，每组七个 Group the characters, seven per group.
            groups = [characters[i:i + 2] for i in range(0, len(characters), 2)]

            # 确保在写入文件时也使用UTF-8编码Ensure that UTF-8 encoding is also used when writing to the file.
            with open(output_file, mode='w', newline='', encoding='utf-8') as file:
                writer = csv.writer(file)
                writer.writerow(['dislist'])  # 写入表头 Write the header.
                for group in groups:
                    writer.writerow([''.join(group)])  # 写入每一组Write each group.

            return output_file

        # 注意替换这里的路径为实际路径Note to replace the paths here with actual paths.
        input_csv = 'wordlist.csv'  # 替换为源CSV文件的路径Replace with the path to the source CSV file.
        output_csv = 'distractorlist.csv'  # 替换为输出CSV文件的路径 Replace with the path to the output CSV file.

        # 调用函数进行处理Call the function for processing.
        shuffled_csv = read_and_shuffle_csv(input_csv, output_csv)
        print(f"Shuffled CSV saved to: {shuffled_csv}")
        def shuffle_columns(rows, column_indices):
            # Extract the specific columns to shuffle
            columns_to_shuffle = [[row[index] for row in rows] for index in column_indices]

            # Shuffle the extracted columns independently
            for column in columns_to_shuffle:
                random.shuffle(column)

            # Reinsert the shuffled columns back into the rows
            for i, row in enumerate(rows):
                for col_index, column in zip(column_indices, columns_to_shuffle):
                    row[col_index] = column[i]

        def read_and_shuffle_csv(input_file, output_file):
            with open(input_file, mode='r', encoding='utf-8') as file:
                reader = csv.reader(file)
                headers = next(reader)  # Read the header row
                rows = list(reader)     # Read the rest of the rows

            # Shuffle the fourth and fifth columns (indices 3 and 4)
            shuffle_columns(rows, [3, 4])

            # Shuffle the last three columns (indices 5, 6, and 7)
            shuffle_columns(rows, [5, 6, 7])

            # Write the shuffled rows back to a new CSV file
            with open(output_file, mode='w', newline='', encoding='utf-8') as file:
                writer = csv.writer(file)
                writer.writerow(headers)  # Write the header row
                writer.writerows(rows)    # Write the shuffled rows

            return output_file

        # 注意替换这里的路径为实际路径
        input_csv = 'wordlist.csv'  # 替换为源CSV文件的路径
        output_csv = 'wordlist1.csv'  # 替换为输出CSV文件的路径

        # 调用函数进行处理
        shuffled_csv = read_and_shuffle_csv(input_csv, output_csv)
        print(f"Shuffled CSV saved to: {shuffled_csv}")
  Routine context
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    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $probe
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    TextComponent blankContext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine distractors
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    TextComponent text_disctractors
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dislist
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = wordlist1.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('probe', '手部'), ('sectag', '脚部'), ('relatedu', ' f'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:12'), ('bignum', '五五'), ('oddeven', 'f')]),
      OrderedDict([('probe', '商店'), ('sectag', '店铺'), ('relatedu', ' f'), ('firstnum', '0:06'), ('dis1num', '0:06'), ('dis2num', '0:03'), ('bignum', '七七'), ('oddeven', 'f')]),
      OrderedDict([('probe', '窗帘'), ('sectag', '帘幔'), ('relatedu', ' f'), ('firstnum', '0:09'), ('dis1num', 0.0), ('dis2num', '0:10'), ('bignum', '四四'), ('oddeven', 'j')]),
      OrderedDict([('probe', '猫咪'), ('sectag', '小猫'), ('relatedu', ' f'), ('firstnum', '0:09'), ('dis1num', 0.0), ('dis2num', '0:10'), ('bignum', '七七'), ('oddeven', 'f')]),
      OrderedDict([('probe', '思考'), ('sectag', '沉思'), ('relatedu', ' f'), ('firstnum', '0:06'), ('dis1num', 0.0), ('dis2num', '0:10'), ('bignum', '九九'), ('oddeven', 'f')]),
      OrderedDict([('probe', '背包'), ('sectag', '手袋'), ('relatedu', ' j'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:10'), ('bignum', '三三'), ('oddeven', 'j')]),
      OrderedDict([('probe', '稻草'), ('sectag', '草草'), ('relatedu', ' j'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:10'), ('bignum', '九九'), ('oddeven', 'j')]),
      OrderedDict([('probe', '杂草'), ('sectag', '草根'), ('relatedu', ' j'), ('firstnum', '0:09'), ('dis1num', '0:06'), ('dis2num', '0:10'), ('bignum', '十十'), ('oddeven', 'j')])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
    Routine context
    LoopInitiator trials_context loopType="TrialHandler"
      Selected rows = $firstnum
      conditionsFile = distractorlist.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dislist', '更粉')]),
        OrderedDict([('dislist', '出便')]),
        OrderedDict([('dislist', '验臂')]),
        OrderedDict([('dislist', '归幸')]),
        OrderedDict([('dislist', '声猪')]),
        OrderedDict([('dislist', '首剪')]),
        OrderedDict([('dislist', '子亡')]),
        OrderedDict([('dislist', '轿妈')]),
        OrderedDict([('dislist', '头味')]),
        OrderedDict([('dislist', '瘦玩')]),
        OrderedDict([('dislist', '射指')]),
        OrderedDict([('dislist', '压唇')]),
        OrderedDict([('dislist', '很进')]),
        OrderedDict([('dislist', '子丑')]),
        OrderedDict([('dislist', '上雹')]),
        OrderedDict([('dislist', '下片')]),
        OrderedDict([('dislist', '午料')]),
        OrderedDict([('dislist', '唱熟')]),
        OrderedDict([('dislist', '篮童')]),
        OrderedDict([('dislist', '光儿')]),
        OrderedDict([('dislist', '金老')]),
        OrderedDict([('dislist', '哑园')]),
        OrderedDict([('dislist', '寒修')]),
        OrderedDict([('dislist', '卖志')]),
        OrderedDict([('dislist', '石多')]),
        OrderedDict([('dislist', '平树')]),
        OrderedDict([('dislist', '宽小')]),
        OrderedDict([('dislist', '过省')]),
        OrderedDict([('dislist', '拳虚')]),
        OrderedDict([('dislist', '见坚')]),
        OrderedDict([('dislist', '织奶')]),
        OrderedDict([('dislist', '雾卖')]),
        OrderedDict([('dislist', '下打')]),
        OrderedDict([('dislist', '开草')]),
        OrderedDict([('dislist', '藏游')]),
        OrderedDict([('dislist', '走润')]),
        OrderedDict([('dislist', '这寻')]),
        OrderedDict([('dislist', '黑子')]),
        OrderedDict([('dislist', '李狱')]),
        OrderedDict([('dislist', '数听')]),
        OrderedDict([('dislist', '小处')]),
        OrderedDict([('dislist', '阅菜')]),
        OrderedDict([('dislist', '车油')]),
        OrderedDict([('dislist', '味洁')]),
        OrderedDict([('dislist', '快锅')]),
        OrderedDict([('dislist', '小星')])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
      Routine distractors
    LoopTerminator trials_context
    Routine T1_number
    LoopInitiator trials_T1 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractorlist.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine distractors
    LoopTerminator trials_T1
    Routine T2_probe
    LoopInitiator trials_T2 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractorlist.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine distractors
    LoopTerminator trials_T2
    Routine Ask_T1
    Routine Ask_T2
  LoopTerminator block
